PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = AashnaStroopSolo
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = pix
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    TextComponent text
      color [set every repeat] = $colour
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'r','b','g','y'
      correctAns = $correct_res
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine ins
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = welcome
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  Routine thanks
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = thank you
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Flow
  Routine ins
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = cond.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'word': 'RED', 'colour': 'red', 'stim_condition': 'c', 'correct_res': 'r'},
      {'word': 'RED', 'colour': 'blue', 'stim_condition': 'i', 'correct_res': 'b'},
      {'word': 'RED', 'colour': 'green', 'stim_condition': 'i', 'correct_res': 'g'},
      {'word': 'RED', 'colour': 'yellow', 'stim_condition': 'i', 'correct_res': 'y'},
      {'word': 'BLUE', 'colour': 'red', 'stim_condition': 'i', 'correct_res': 'r'},
      {'word': 'BLUE', 'colour': 'blue', 'stim_condition': 'c', 'correct_res': 'b'},
      {'word': 'BLUE', 'colour': 'green', 'stim_condition': 'i', 'correct_res': 'g'},
      {'word': 'BLUE', 'colour': 'yellow', 'stim_condition': 'i', 'correct_res': 'y'},
      {'word': 'GREEN', 'colour': 'red', 'stim_condition': 'i', 'correct_res': 'r'},
      {'word': 'GREEN', 'colour': 'blue', 'stim_condition': 'i', 'correct_res': 'b'},
      {'word': 'GREEN', 'colour': 'green', 'stim_condition': 'c', 'correct_res': 'g'},
      {'word': 'GREEN', 'colour': 'yellow', 'stim_condition': 'i', 'correct_res': 'y'},
      {'word': 'YELLOW', 'colour': 'red', 'stim_condition': 'i', 'correct_res': 'r'},
      {'word': 'YELLOW', 'colour': 'blue', 'stim_condition': 'i', 'correct_res': 'b'},
      {'word': 'YELLOW', 'colour': 'green', 'stim_condition': 'i', 'correct_res': 'g'},
      {'word': 'YELLOW', 'colour': 'yellow', 'stim_condition': 'c', 'correct_res': 'y'}]
    Routine trial
  LoopTerminator trials
  Routine thanks
